<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 09/07/2015 at 15:13:36 using:

COR (0.9.31.1409)
Copyright 2002-2015 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
-->
<model xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" name="sachse_model_2007" cmeta:id="sachse_model_2007" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
	<documentation xmlns="http://cellml.org/tmp-documentation">
		<article>
			<articleinfo>
				<title>Electrophysiological Modeling of Fibroblasts and Their Interaction with Myocytes</title>
				<author>
					<firstname>Catherine</firstname>
					<surname>Lloyd</surname>
					<affiliation>
						<shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
					</affiliation>
				</author>
			</articleinfo>
			<section id="sec_status">
				<title>Model Status</title>
				<para>
        This CellML version of the model runs in PCEnv, COR and JSim to recreate the results in the published paper.  The units have been checked and are consistent, and we would like to thank Frank Sachse, the original model author, for his advice and assistance in getting the CellML version of this model working.  This particular CellML model represents the fibroblast.
          </para>
			</section>
			<sect1 id="sec_structure">
				<title>Model Structure</title>
				<para>
Fibroblasts are the most abundant cell type present in the heart.  They are arranged in the myocardium, as a three-dimensional network, where they are responsible for the secretion of extracellular matrix proteins, and also play a role in cardiac electrophysiology.  Although fibroblasts themselves are electrically in-excitable, they can contribute to the electrophysiology of neighbouring myocytes through fibroblast-myocyte coupling.  Although the electrical coupling of fibroblasts and myocytes has been demonstrated experimentally both in vivo and in vitro, the precise role of fibroblasts as electrical bridges between myocytes still remains to be defined.   
</para>
				<para>
In the paper described here, Frank Sachse, Alonso Moreno and J. A. Abildskov address this issue by presenting mathematical models of cellular and multi-cellular electrophysiology.  A novel mathematical model of cardiac fibroblasts was developed on the basis of experimental data from whole cell patch clamp and polymerase chain reaction studies.  This model was then applied, together with models of ventricular myocytes (which were based on the <ulink url="http://www.cellml.org/models/pandit_clark_giles_demir_2001_version07">Pandit <emphasis>et al.</emphasis> 2001 model</ulink> of the rat left ventricular myocyte), to determine the electrophysiological effects of heterogeneous electrical coupling of cells.
</para>
				<informalfigure float="0" id="fig_reaction_diagram">
					<mediaobject>
						<imageobject>
							<objectinfo>
								<title>model diagram</title>
							</objectinfo>
							<imagedata fileref="sachse_2007.png"/>
						</imageobject>
					</mediaobject>
					<caption>Schematic diagram of the fibroblast cell model.  A Markovian model for the time and voltage dependent outward current (I<subscript>SHkr</subscript>) is embedded within an electrophysiological cell model.  The ion channel has six different states; five closed states (C0-4) and one open state (O)</caption>
				</informalfigure>
				<para>
The complete original paper reference is cited below:
</para>
				<para>
Electrophysiological Modeling of Fibroblasts and Their Interaction with Myocytes, F.B. Sachse, A.P. Moreno, and J.A. Abildskov, 2007, <emphasis>Annals of Biomedical Engineering</emphasis>
					<ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&amp;cmd=Retrieve&amp;dopt=AbstractPlus&amp;list_uids=17999190&amp;query_hl=1&amp;itool=pubmed_docsum">PubMed ID: 17999190</ulink>
				</para>
			</sect1>
		</article>
	</documentation>
	<rdf:RDF>
		<rdf:Bag rdf:about="rdf:#55d23512-91a0-445e-9d3d-cab978e3125a">
			<rdf:li>cardiac</rdf:li>
			<rdf:li>cardiac electrophysiology</rdf:li>
			<rdf:li>fibroblast</rdf:li>
			<rdf:li>myocyte</rdf:li>
			<rdf:li>electrophysiology</rdf:li>
		</rdf:Bag>
		<rdf:Seq rdf:about="rdf:#d5c5d1cc-51af-483f-847d-3c43e0168264">
			<rdf:li rdf:resource="rdf:#a2261697-686f-46c9-a716-68dcee58cd52"/>
			<rdf:li rdf:resource="rdf:#9cff9e41-61d2-402e-9ce7-42cfe6bcb072"/>
			<rdf:li rdf:resource="rdf:#28c60c48-a93f-452c-b8b4-eb5c7de81bce"/>
		</rdf:Seq>
		<rdf:Description rdf:about="rdf:#e1e29d37-53c7-41ed-b154-097036f4f741">
			<rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
			<rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="">
			<dc:title>Electrophysiological Modeling of Fibroblasts and Their Interaction with Myocytes (Fibroblast Model)</dc:title>
			<dc:publisher>The University of Auckland, Bioengineering Institute</dc:publisher>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#68403c49-50e2-46bc-b477-d6d452b89e9b"/>
			<dcterms:created rdf:resource="rdf:#7af5a239-6f54-4953-8183-cbbd6672f54d"/>
			<dc:creator rdf:resource="rdf:#cd5ec6f2-3907-4d4e-ac6f-cecbbc5f1f1b"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#4978d931-3f7f-4c0a-a333-20565ac8fb3c">
			<dc:creator rdf:resource="rdf:#d5c5d1cc-51af-483f-847d-3c43e0168264"/>
			<dc:title>Electrophysiological Modeling of Fibroblasts and Their Interaction with Myocytes</dc:title>
			<bqs:volume>36(1)</bqs:volume>
			<bqs:first_page>41</bqs:first_page>
			<bqs:Journal rdf:resource="rdf:#bb12bf13-c1b2-4fbf-b732-c3a309c66dc6"/>
			<dcterms:issued rdf:resource="rdf:#5f606e73-9b8e-4a61-b437-265ac93e2a7e"/>
			<bqs:last_page>56</bqs:last_page>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#7ec84fe3-d2d8-4c5d-85f5-7f20a3dfae45">
			<vCard:Given>F</vCard:Given>
			<vCard:Family>Sachse</vCard:Family>
			<vCard:Other>B</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#5f606e73-9b8e-4a61-b437-265ac93e2a7e">
			<dcterms:W3CDTF>2008-01-00 00:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#b316a018-8d9e-40e1-899d-62283fedb013">
			<vCard:Given>A</vCard:Given>
			<vCard:Family>Moreno</vCard:Family>
			<vCard:Other>P</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="#sachse_model_2007">
			<dc:title>
        Sachse, Moreno and Abildskov's 2007 mathematical model of the electrophysiology of fibroblasts and how they interact with myocytes.
      </dc:title>
			<cmeta:comment xmlns:cmeta="http://www.cellml.org/metadata/1.0#" rdf:resource="rdf:#6eaaec91-79cf-422c-8760-66f1ef593dac"/>
			<bqs:reference rdf:resource="rdf:#096cd246-65fd-498d-853a-3dac6ffd54a9"/>
			<bqs:reference rdf:resource="rdf:#6be3d549-ce0a-4950-a38c-d611e5ba99f3"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#9cff9e41-61d2-402e-9ce7-42cfe6bcb072">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#b316a018-8d9e-40e1-899d-62283fedb013"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#6be3d549-ce0a-4950-a38c-d611e5ba99f3">
			<dc:subject rdf:resource="rdf:#9e8d9d25-743d-4ca9-acc0-1e61ade60a44"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#096cd246-65fd-498d-853a-3dac6ffd54a9">
			<bqs:Pubmed_id>17999190</bqs:Pubmed_id>
			<bqs:JournalArticle rdf:resource="rdf:#4978d931-3f7f-4c0a-a333-20565ac8fb3c"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#4401a32d-a2a2-43ff-82d7-a608ea8194cf">
			<vCard:Given>Catherine</vCard:Given>
			<vCard:Family>Lloyd</vCard:Family>
			<vCard:Other>May</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#cd5ec6f2-3907-4d4e-ac6f-cecbbc5f1f1b">
			<vCard:ORG rdf:resource="rdf:#7297cb66-a158-4c77-a767-784cb41cfdf5"/>
			<vCard:EMAIL rdf:resource="rdf:#e1e29d37-53c7-41ed-b154-097036f4f741"/>
			<vCard:N rdf:resource="rdf:#4401a32d-a2a2-43ff-82d7-a608ea8194cf"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#9e8d9d25-743d-4ca9-acc0-1e61ade60a44">
			<bqs:subject_type>keyword</bqs:subject_type>
			<rdf:value rdf:resource="rdf:#55d23512-91a0-445e-9d3d-cab978e3125a"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#7297cb66-a158-4c77-a767-784cb41cfdf5">
			<vCard:Orgname>The University of Auckland</vCard:Orgname>
			<vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#6eaaec91-79cf-422c-8760-66f1ef593dac">
			<dc:creator rdf:resource="rdf:#0e63034d-3126-4a7b-9b66-7d4dea9299fa"/>
			<rdf:value>This is a CellML description of Sachse, Moreno and Abildskov's 2007 mathematical model of the electrophysiology of fibroblasts and how they interact with myocytes.</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#bb12bf13-c1b2-4fbf-b732-c3a309c66dc6">
			<dc:title>Annals of Biomedical Engineering</dc:title>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#28c60c48-a93f-452c-b8b4-eb5c7de81bce">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#648f2abb-8814-4a1a-b00f-87b7c3948478"/>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#7af5a239-6f54-4953-8183-cbbd6672f54d">
			<dcterms:W3CDTF>2007-11-16T00:00:00+00:00</dcterms:W3CDTF>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#0e63034d-3126-4a7b-9b66-7d4dea9299fa">
			<vCard:FN>Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#328118c2-53e7-48f0-a6c7-49baab713d4a">
			<vCard:FN>Catherine Lloyd</vCard:FN>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#648f2abb-8814-4a1a-b00f-87b7c3948478">
			<vCard:Given>J</vCard:Given>
			<vCard:Family>Abildskov</vCard:Family>
			<vCard:Other>A</vCard:Other>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#68403c49-50e2-46bc-b477-d6d452b89e9b">
			<dc:creator rdf:resource="rdf:#328118c2-53e7-48f0-a6c7-49baab713d4a"/>
			<rdf:value>This CellML version of the model runs in PCEnv, COR and JSim to recreate the results in the published paper.  The units have been checked and are consistent, and we would like to thank Frank Sachse, the original model author, for his advice and assistance in getting the CellML version of this model working.  This particular CellML model represents the fibroblast.</rdf:value>
		</rdf:Description>
		<rdf:Description rdf:about="rdf:#a2261697-686f-46c9-a716-68dcee58cd52">
			<rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
			<vCard:N rdf:resource="rdf:#7ec84fe3-d2d8-4c5d-85f5-7f20a3dfae45"/>
		</rdf:Description>
	</rdf:RDF>   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millivolt">
      <unit units="volt" prefix="milli"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="microfarad">
      <unit units="farad" prefix="micro"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="microsiemens">
      <unit units="siemens" prefix="micro"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="nanoampere">
      <unit units="ampere" prefix="nano"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millimolar">
      <unit units="mole" prefix="milli"/>
      <unit units="litre" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="per_millimolar">
      <unit units="millimolar" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="flux">
      <unit units="millimolar"/>
      <unit units="second" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="first_order_rate_constant">
      <unit units="second" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="millijoule_per_kelvin_mole">
      <unit units="joule" prefix="milli"/>
      <unit units="kelvin" exponent="-1"/>
      <unit units="mole" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="coulomb_per_mole">
      <unit units="coulomb"/>
      <unit units="mole" exponent="-1"/>
   </units>
   <units xmlns="http://www.cellml.org/cellml/1.0#" name="microlitre_per_second">
      <unit units="litre" prefix="micro"/>
      <unit units="second" exponent="-1"/>
   </units>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="environment">
      <variable name="time" units="second" public_interface="out" cmeta:id="time">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#time">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="membrane">
      <variable name="Vm" units="millivolt" initial_value="-58" public_interface="out" cmeta:id="membrane_voltage">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_voltage">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="Cm" units="microfarad" initial_value="4.5e-6" cmeta:id="membrane_capacitance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_capacitance">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="I_b" units="nanoampere" public_interface="in"/>
      <variable name="I_Kir" units="nanoampere" public_interface="in"/>
      <variable name="I_Shkr" units="nanoampere" public_interface="in"/>
      <variable name="I_stim" units="nanoampere" public_interface="in"/>
      <variable name="time" units="second" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Vm</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <apply>
                     <minus/>
                     <apply>
                        <plus/>
                        <ci>I_Kir</ci>
                        <ci>I_Shkr</ci>
                        <ci>I_b</ci>
                     </apply>
                     <ci>I_stim</ci>
                  </apply>
               </apply>
               <ci>Cm</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="I_Kir">
      <variable name="I_Kir" units="nanoampere" public_interface="out" cmeta:id="membrane_inward_rectifier_potassium_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_inward_rectifier_potassium_current">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="GKir" units="microsiemens" initial_value="1e-3" cmeta:id="membrane_inward_rectifier_potassium_current_conductance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_inward_rectifier_potassium_current_conductance">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="aKir" units="dimensionless" initial_value="0.94"/>
      <variable name="bKir" units="dimensionless" initial_value="1.26"/>
      <variable name="EK" units="millivolt"/>
      <variable name="OKir" units="dimensionless"/>
      <variable name="time" units="second" public_interface="in"/>
      <variable name="Vm" units="millivolt" public_interface="in"/>
      <variable name="R" units="millijoule_per_kelvin_mole" public_interface="in"/>
      <variable name="T" units="kelvin" public_interface="in"/>
      <variable name="F" units="coulomb_per_mole" public_interface="in"/>
      <variable name="Ko" units="millimolar" public_interface="in"/>
      <variable name="Ki" units="millimolar" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>I_Kir</ci>
            <apply>
               <times/>
               <ci>GKir</ci>
               <ci>OKir</ci>
               <apply>
                  <root/>
                  <apply>
                     <times/>
                     <ci>Ko</ci>
                     <cn type="e-notation" cellml:units="per_millimolar">1<sep/>-3</cn>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <ci>Vm</ci>
                  <ci>EK</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>OKir</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <ci>aKir</ci>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <ci>bKir</ci>
                           <apply>
                              <minus/>
                              <ci>Vm</ci>
                              <ci>EK</ci>
                           </apply>
                           <ci>F</ci>
                        </apply>
                        <apply>
                           <times/>
                           <ci>R</ci>
                           <ci>T</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>EK</ci>
            <apply>
               <times/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>R</ci>
                     <ci>T</ci>
                  </apply>
                  <ci>F</ci>
               </apply>
               <apply>
                  <ln/>
                  <apply>
                     <divide/>
                     <ci>Ko</ci>
                     <ci>Ki</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="I_Shkr">
      <variable name="I_Shkr" units="nanoampere" public_interface="out" cmeta:id="membrane_delayed_rectifier_potassium_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_delayed_rectifier_potassium_current">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_delayed_rectifier_potassium_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="PShkr" units="microlitre_per_second" initial_value="5.4e-9" cmeta:id="membrane_delayed_rectifier_potassium_current_conductance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_delayed_rectifier_potassium_current_conductance">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_delayed_rectifier_potassium_current_conductance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="C0Shkr" units="dimensionless" initial_value="9.11e-1"/>
      <variable name="C1Shkr" units="dimensionless" initial_value="8.57e-2"/>
      <variable name="C2Shkr" units="dimensionless" initial_value="3.02e-3"/>
      <variable name="C3Shkr" units="dimensionless" initial_value="4.74e-5"/>
      <variable name="C4Shkr" units="dimensionless" initial_value="2.79e-7"/>
      <variable name="OShkr" units="dimensionless" initial_value="0"/>
      <variable name="kv" units="first_order_rate_constant"/>
      <variable name="k_v" units="first_order_rate_constant"/>
      <variable name="kv0" units="first_order_rate_constant" initial_value="30"/>
      <variable name="zv" units="dimensionless" initial_value="1.28"/>
      <variable name="k_v0" units="first_order_rate_constant" initial_value="2"/>
      <variable name="z_v" units="dimensionless" initial_value="-1.53"/>
      <variable name="ko" units="first_order_rate_constant" initial_value="77"/>
      <variable name="k_o" units="first_order_rate_constant" initial_value="18"/>
      <variable name="time" units="second" public_interface="in"/>
      <variable name="Vm" units="millivolt" public_interface="in"/>
      <variable name="R" units="millijoule_per_kelvin_mole" public_interface="in"/>
      <variable name="T" units="kelvin" public_interface="in"/>
      <variable name="F" units="coulomb_per_mole" public_interface="in"/>
      <variable name="Ko" units="millimolar" public_interface="in"/>
      <variable name="Ki" units="millimolar" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>I_Shkr</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>PShkr</ci>
                        <ci>OShkr</ci>
                        <ci>Vm</ci>
                        <apply>
                           <power/>
                           <ci>F</ci>
                           <cn cellml:units="dimensionless">2</cn>
                        </apply>
                     </apply>
                     <apply>
                        <times/>
                        <ci>R</ci>
                        <ci>T</ci>
                     </apply>
                  </apply>
                  <apply>
                     <minus/>
                     <ci>Ki</ci>
                     <apply>
                        <times/>
                        <ci>Ko</ci>
                        <apply>
                           <exp/>
                           <apply>
                              <divide/>
                              <apply>
                                 <times/>
                                 <apply>
                                    <minus/>
                                    <ci>Vm</ci>
                                 </apply>
                                 <ci>F</ci>
                              </apply>
                              <apply>
                                 <times/>
                                 <ci>R</ci>
                                 <ci>T</ci>
                              </apply>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <times/>
                           <apply>
                              <minus/>
                              <ci>Vm</ci>
                           </apply>
                           <ci>F</ci>
                        </apply>
                        <apply>
                           <times/>
                           <ci>R</ci>
                           <ci>T</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>kv</ci>
            <apply>
               <times/>
               <ci>kv0</ci>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>Vm</ci>
                        <ci>zv</ci>
                        <ci>F</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>R</ci>
                        <ci>T</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>k_v</ci>
            <apply>
               <times/>
               <ci>k_v0</ci>
               <apply>
                  <exp/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <ci>Vm</ci>
                        <ci>z_v</ci>
                        <ci>F</ci>
                     </apply>
                     <apply>
                        <times/>
                        <ci>R</ci>
                        <ci>T</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C0Shkr</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>k_v</ci>
                  <ci>C1Shkr</ci>
               </apply>
               <apply>
                  <times/>
                  <cn cellml:units="dimensionless">4</cn>
                  <ci>kv</ci>
                  <ci>C0Shkr</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C1Shkr</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">2</cn>
                     <ci>k_v</ci>
                     <ci>C2Shkr</ci>
                  </apply>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">4</cn>
                     <ci>kv</ci>
                     <ci>C0Shkr</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <cn cellml:units="dimensionless">3</cn>
                        <ci>kv</ci>
                     </apply>
                     <ci>k_v</ci>
                  </apply>
                  <ci>C1Shkr</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C2Shkr</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">3</cn>
                     <ci>k_v</ci>
                     <ci>C3Shkr</ci>
                  </apply>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">3</cn>
                     <ci>kv</ci>
                     <ci>C1Shkr</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <ci>kv</ci>
                     </apply>
                     <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <ci>k_v</ci>
                     </apply>
                  </apply>
                  <ci>C2Shkr</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C3Shkr</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">4</cn>
                     <ci>k_v</ci>
                     <ci>C4Shkr</ci>
                  </apply>
                  <apply>
                     <times/>
                     <cn cellml:units="dimensionless">2</cn>
                     <ci>kv</ci>
                     <ci>C2Shkr</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>kv</ci>
                     <apply>
                        <times/>
                        <cn cellml:units="dimensionless">3</cn>
                        <ci>k_v</ci>
                     </apply>
                  </apply>
                  <ci>C3Shkr</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>C4Shkr</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>k_o</ci>
                     <ci>OShkr</ci>
                  </apply>
                  <apply>
                     <times/>
                     <ci>kv</ci>
                     <ci>C3Shkr</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <apply>
                     <plus/>
                     <ci>ko</ci>
                     <apply>
                        <times/>
                        <cn cellml:units="dimensionless">4</cn>
                        <ci>k_v</ci>
                     </apply>
                  </apply>
                  <ci>C4Shkr</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>OShkr</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>ko</ci>
                  <ci>C4Shkr</ci>
               </apply>
               <apply>
                  <times/>
                  <ci>k_o</ci>
                  <ci>OShkr</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="I_b">
      <variable name="I_b" units="nanoampere" public_interface="out" cmeta:id="membrane_leakage_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_leakage_current">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_leakage_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="Gb" units="microsiemens" initial_value="6.9e-6" cmeta:id="membrane_leakage_current_conductance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_leakage_current_conductance">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_leakage_current_conductance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="Eb" units="millivolt" initial_value="0"/>
      <variable name="time" units="second" public_interface="in"/>
      <variable name="Vm" units="millivolt" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>I_b</ci>
            <apply>
               <times/>
               <ci>Gb</ci>
               <apply>
                  <minus/>
                  <ci>Vm</ci>
                  <ci>Eb</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="I_stim">
      <variable name="I_stim" units="nanoampere" public_interface="out" cmeta:id="membrane_stimulus_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="stim_start" units="second" initial_value="0.1" cmeta:id="membrane_stimulus_current_offset">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_offset">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="stim_period" units="second" initial_value="1" cmeta:id="membrane_stimulus_current_period">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_period">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="stim_duration" units="second" initial_value="0.001" cmeta:id="membrane_stimulus_current_duration">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_duration">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="stim_amplitude" units="nanoampere" initial_value="0.1" cmeta:id="membrane_stimulus_current_amplitude">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_amplitude">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="time" units="second" public_interface="in"/>
      <variable name="Vm" units="millivolt" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>I_stim</ci>
            <piecewise>
               <piece>
                  <ci>stim_amplitude</ci>
                  <apply>
                     <and/>
                     <apply>
                        <geq/>
                        <apply>
                           <minus/>
                           <ci>time</ci>
                           <apply>
                              <times/>
                              <apply>
                                 <floor/>
                                 <apply>
                                    <divide/>
                                    <ci>time</ci>
                                    <ci>stim_period</ci>
                                 </apply>
                              </apply>
                              <ci>stim_period</ci>
                           </apply>
                        </apply>
                        <ci>stim_start</ci>
                     </apply>
                     <apply>
                        <leq/>
                        <apply>
                           <minus/>
                           <ci>time</ci>
                           <apply>
                              <times/>
                              <apply>
                                 <floor/>
                                 <apply>
                                    <divide/>
                                    <ci>time</ci>
                                    <ci>stim_period</ci>
                                 </apply>
                              </apply>
                              <ci>stim_period</ci>
                           </apply>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>stim_start</ci>
                           <ci>stim_duration</ci>
                        </apply>
                     </apply>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="nanoampere">0</cn>
               </otherwise>
            </piecewise>
         </apply>
      </math>
   </component>
   <component xmlns="http://www.cellml.org/cellml/1.0#" name="model_parameters">
      <variable name="R" units="millijoule_per_kelvin_mole" initial_value="8310" public_interface="out"/>
      <variable name="T" units="kelvin" initial_value="295" public_interface="out"  cmeta:id="temperature">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#temperature">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#temperature"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="F" units="coulomb_per_mole" initial_value="9.65e4" public_interface="out"/>
      <variable name="Ki" units="millimolar" initial_value="140" public_interface="out" cmeta:id="cytosolic_potassium_concentration">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#cytosolic_potassium_concentration">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="Ko" units="millimolar" initial_value="5" public_interface="out" cmeta:id="extracellular_potassium_concentration">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#extracellular_potassium_concentration">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
   </component>
   <group xmlns="http://www.cellml.org/cellml/1.0#">
      <relationship_ref relationship="containment"/>
      <component_ref component="membrane">
         <component_ref component="I_Kir"/>
         <component_ref component="I_Shkr"/>
         <component_ref component="I_b"/>
         <component_ref component="I_stim"/>
      </component_ref>
   </group>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="membrane" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="I_Kir" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="I_Shkr" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="I_b" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="I_stim" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="membrane" component_2="I_Kir"/>
      <map_variables variable_1="I_Kir" variable_2="I_Kir"/>
      <map_variables variable_1="Vm" variable_2="Vm"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="membrane" component_2="I_Shkr"/>
      <map_variables variable_1="I_Shkr" variable_2="I_Shkr"/>
      <map_variables variable_1="Vm" variable_2="Vm"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="membrane" component_2="I_b"/>
      <map_variables variable_1="I_b" variable_2="I_b"/>
      <map_variables variable_1="Vm" variable_2="Vm"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="membrane" component_2="I_stim"/>
      <map_variables variable_1="I_stim" variable_2="I_stim"/>
      <map_variables variable_1="Vm" variable_2="Vm"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="I_Kir" component_2="model_parameters"/>
      <map_variables variable_1="Ko" variable_2="Ko"/>
      <map_variables variable_1="Ki" variable_2="Ki"/>
      <map_variables variable_1="R" variable_2="R"/>
      <map_variables variable_1="T" variable_2="T"/>
      <map_variables variable_1="F" variable_2="F"/>
   </connection>
   <connection xmlns="http://www.cellml.org/cellml/1.0#">
      <map_components component_1="I_Shkr" component_2="model_parameters"/>
      <map_variables variable_1="Ko" variable_2="Ko"/>
      <map_variables variable_1="Ki" variable_2="Ki"/>
      <map_variables variable_1="R" variable_2="R"/>
      <map_variables variable_1="T" variable_2="T"/>
      <map_variables variable_1="F" variable_2="F"/>
   </connection>
</model>
