// This CellML file was generated on 21/04/2010 at 18:19:58 using:
//
// COR (0.9.31.1371)
// Copyright 2002-2010 Dr Alan Garny
// http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.cellml.org/
def model grandi2010 as
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit uA_per_uF as
    unit ampere {pref: micro};
    unit farad {pref: micro, expo: -1};
  enddef;

  def comp cell as
    var time: ms;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: uA_per_uF {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset
    var stim_offset: ms {init: 0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: ms {init: 1000};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration
    var stim_duration: ms {init: 3};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: uA_per_uF {init: -15};
    var past: ms;
    var sm: dimensionless {init: 0.00384941567866232};
    var sh: dimensionless {init: 0.623723834301669};
    var sj: dimensionless {init: 0.622080736932815};
    var sd: dimensionless {init: 2.95884913218079e-6};
    var sf: dimensionless {init: 0.995094078386247};
    var sfcaBj: dimensionless {init: 0.0246274349529557};
    var sfcaBsl: dimensionless {init: 0.0150911724206476};
    var sxtos: dimensionless {init: 0.000442853722673121};
    var sytos: dimensionless {init: 0.789013894749951};
    var sxtof: dimensionless {init: 0.000442846429332686};
    var sytof: dimensionless {init: 0.999995784674368};
    var sxkr: dimensionless {init: 0.020160578118589};
    var sxks: dimensionless {init: 0.00430143235332308};
    var sRyRr: dimensionless {init: 0.893326456705696};
    var sRyRo: dimensionless {init: 7.56436968249499e-7};
    var sRyRi: dimensionless {init: 9.03266331737064e-8};
    var sNaBj: dimensionless {init: 3.41097946062695};
    var sNaBsl: dimensionless {init: 0.744248540671373};
    var sTnCL: dimensionless {init: 0.00904644567707666};
    var sTnCHc: dimensionless {init: 0.1183943202639};
    var sTnCHm: dimensionless {init: 0.0101423649465603};
    var sCaM: dimensionless {init: 0.000299824763475116};
    var sMyoc: dimensionless {init: 0.00201443980536826};
    var sMyom: dimensionless {init: 0.137467597337588};
    var sSRB: dimensionless {init: 0.00220110816535249};
    var sSLLj: dimensionless {init: 0.00739549938515031};
    var sSLLsl: dimensionless {init: 0.00979616077807075};
    var sSLHj: dimensionless {init: 0.0735225248399363};
    var sSLHsl: dimensionless {init: 0.113642236788144};
    var sCsqnb: dimensionless {init: 1.20762712858574};
    var sCa_sr: dimensionless {init: 0.563755421404699};
    var sNaj: dimensionless {init: 8.21411036389602};
    var sNasl: dimensionless {init: 8.21322794157889};
    var sNai: dimensionless {init: 8.21340895351653};
    var sKi: dimensionless {init: 120};
    var sCaj: dimensionless {init: 0.000175648385857736};
    var sCasl: dimensionless {init: 0.000105614570409386};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var sCai: dimensionless {init: 8.85230799863012e-5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var sVm: millivolt {init: -81.3842590704928};
    var R: dimensionless {init: 8314};
    var Frdy: dimensionless {init: 96485};
    var Temp: dimensionless {init: 310};
    var FoRT: dimensionless;
    var Cmem: dimensionless {init: 1.381e-10};
    var Qpow: dimensionless;
    var cellLength: dimensionless {init: 100};
    var cellRadius: dimensionless {init: 10.25};
    var junctionLength: dimensionless {init: 0.16};
    var junctionRadius: dimensionless {init: 0.015};
    var Vcell: dimensionless;
    var Vmyo: dimensionless;
    var Vsr: dimensionless;
    var Vsl: dimensionless;
    var Vjunc: dimensionless;
    var SAjunc: dimensionless;
    var SAsl: dimensionless;
    var J_ca_juncsl: dimensionless;
    var J_ca_slmyo: dimensionless;
    var J_na_juncsl: dimensionless;
    var J_na_slmyo: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var G_CaL_mult: dimensionless {init: 1};
    var Fjunc: dimensionless {init: 0.11};
    var Fsl: dimensionless;
    var Fjunc_CaL: dimensionless {init: 0.9};
    var Fsl_CaL: dimensionless;
    var Cli: dimensionless {init: 15};
    var Clo: dimensionless {init: 150};
    var Ko: dimensionless {init: 5.4};
    var Nao: dimensionless {init: 140};
    var Cao: dimensionless {init: 1.8};
    var Mgi: dimensionless {init: 1};
    var ek: dimensionless;
    var eca_junc: dimensionless;
    var eca_sl: dimensionless;
    var ecl: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var GNa: dimensionless {init: 23};
    var GNaB: dimensionless {init: 0.000597};
    var IbarNaK: dimensionless;
    var KmNaip: dimensionless {init: 11};
    var KmKo: dimensionless {init: 1.5};
    var pNaK: dimensionless {init: 0.01833};
    var gkp: dimensionless;
    var GClCa: dimensionless;
    var GClB: dimensionless;
    var KdClCa: dimensionless {init: 0.1};
    var pNa: dimensionless;
    var pCa: dimensionless;
    var pK: dimensionless;
    var Q10CaL: dimensionless {init: 1.8};
    var IbarNCX: dimensionless;
    var KmCai: dimensionless {init: 0.00359};
    var KmCao: dimensionless {init: 1.3};
    var KmNai: dimensionless {init: 12.29};
    var KmNao: dimensionless {init: 87.5};
    var ksat: dimensionless {init: 0.32};
    var nu: dimensionless {init: 0.27};
    var Kdact: dimensionless {init: 0.00015};
    var Q10NCX: dimensionless {init: 1.57};
    var IbarSLCaP: dimensionless {init: 0.0673};
    var KmPCa: dimensionless {init: 0.0005};
    var GCaB: dimensionless {init: 0.0005513};
    var Q10SLCaP: dimensionless {init: 2.35};
    var Q10SRCaP: dimensionless {init: 2.6};
    var Vmax_SRCaP: dimensionless;
    var Kmf: dimensionless {init: 0.000246};
    var Kmr: dimensionless {init: 1.7};
    var hillSRCaP: dimensionless {init: 1.787};
    var ks: dimensionless {init: 25};
    var koCa: dimensionless {init: 10};
    var kom: dimensionless {init: 0.06};
    var kiCa: dimensionless {init: 0.5};
    var kim: dimensionless {init: 0.005};
    var ec50SR: dimensionless {init: 0.45};
    var Bmax_Naj: dimensionless {init: 7.561};
    var Bmax_Nasl: dimensionless {init: 1.65};
    var koff_na: dimensionless {init: 0.001};
    var kon_na: dimensionless {init: 0.0001};
    var Bmax_TnClow: dimensionless {init: 0.07};
    var koff_tncl: dimensionless {init: 0.0196};
    var kon_tncl: dimensionless {init: 32.7};
    var Bmax_TnChigh: dimensionless {init: 0.14};
    var koff_tnchca: dimensionless {init: 3.2e-5};
    var kon_tnchca: dimensionless {init: 2.37};
    var koff_tnchmg: dimensionless {init: 0.00333};
    var kon_tnchmg: dimensionless {init: 0.003};
    var Bmax_CaM: dimensionless {init: 0.024};
    var koff_cam: dimensionless {init: 0.238};
    var kon_cam: dimensionless {init: 34};
    var Bmax_myosin: dimensionless {init: 0.14};
    var koff_myoca: dimensionless {init: 0.00046};
    var kon_myoca: dimensionless {init: 13.8};
    var koff_myomg: dimensionless {init: 5.7e-5};
    var kon_myomg: dimensionless {init: 0.0157};
    var Bmax_SR: dimensionless;
    var koff_sr: dimensionless {init: 0.06};
    var kon_sr: dimensionless {init: 100};
    var Bmax_SLlowsl: dimensionless;
    var Bmax_SLlowj: dimensionless;
    var koff_sll: dimensionless {init: 1.3};
    var kon_sll: dimensionless {init: 100};
    var Bmax_SLhighsl: dimensionless;
    var Bmax_SLhighj: dimensionless;
    var koff_slh: dimensionless {init: 0.03};
    var kon_slh: dimensionless {init: 100};
    var Bmax_Csqn: dimensionless;
    var koff_csqn: dimensionless {init: 65};
    var kon_csqn: dimensionless {init: 100};
    var mss: dimensionless;
    var taum: dimensionless;
    var tauh: dimensionless;
    var hss: dimensionless;
    var tauj: dimensionless;
    var jss: dimensionless;
    var I_Na_junc: dimensionless;
    var I_Na_sl: dimensionless;
    var I_Na: dimensionless;
    var I_nabk_junc: dimensionless;
    var I_nabk_sl: dimensionless;
    var I_nabk: dimensionless;
    var sigma: dimensionless;
    var fnak: dimensionless;
    var I_nak_junc: dimensionless;
    var I_nak_sl: dimensionless;
    var I_nak: dimensionless;
    var gkr: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var gkr_mult: dimensionless {init: 1};
    var xrss: dimensionless;
    var tauxr: dimensionless;
    var rkr: dimensionless;
    var I_kr: dimensionless;
    var eks: dimensionless;
    var gks_junc: dimensionless;
    var gks_sl: dimensionless;
    var xsss: dimensionless;
    var tauxs: dimensionless;
    var I_ks_junc: dimensionless;
    var I_ks_sl: dimensionless;
    var I_ks: dimensionless;
    var kp_kp: dimensionless;
    var I_kp_junc: dimensionless;
    var I_kp_sl: dimensionless;
    var I_kp: dimensionless;
    var GtoSlow: dimensionless;
    var GtoFast: dimensionless;
    var xtoss: dimensionless;
    var ytoss: dimensionless;
    var tauxtos: dimensionless;
    var tauytos: dimensionless;
    var I_tos: dimensionless;
    var tauxtof: dimensionless;
    var tauytof: dimensionless;
    var I_tof: dimensionless;
    var I_to: dimensionless;
    var aki: dimensionless;
    var bki: dimensionless;
    var kiss: dimensionless;
    var I_ki: dimensionless;
    var I_ClCa_junc: dimensionless;
    var I_ClCa_sl: dimensionless;
    var I_ClCa: dimensionless;
    var I_Clbk: dimensionless;
    var fss: dimensionless;
    var dss: dimensionless;
    var taud: dimensionless;
    var tauf: dimensionless;
    var fcaCaMSL: dimensionless {init: 0};
    var fcaCaj: dimensionless {init: 0};
    var ibarca_j: dimensionless;
    var ibarca_sl: dimensionless;
    var ibark: dimensionless;
    var ibarna_j: dimensionless;
    var ibarna_sl: dimensionless;
    var I_Ca_junc: dimensionless;
    var I_Ca_sl: dimensionless;
    var I_Ca: dimensionless;
    var I_CaK: dimensionless;
    var I_CaNa_junc: dimensionless;
    var I_CaNa_sl: dimensionless;
    var I_CaNa: dimensionless;
    var I_Catot: dimensionless;
    var Ka_junc: dimensionless;
    var Ka_sl: dimensionless;
    var s1_junc: dimensionless;
    var s1_sl: dimensionless;
    var s2_junc: dimensionless;
    var s3_junc: dimensionless;
    var s2_sl: dimensionless;
    var s3_sl: dimensionless;
    var I_ncx_junc: dimensionless;
    var I_ncx_sl: dimensionless;
    var I_ncx: dimensionless;
    var I_pca_junc: dimensionless;
    var I_pca_sl: dimensionless;
    var I_pca: dimensionless;
    var I_cabk_junc: dimensionless;
    var I_cabk_sl: dimensionless;
    var I_cabk: dimensionless;
    var MaxSR: dimensionless {init: 15};
    var MinSR: dimensionless {init: 1};
    var kCaSR: dimensionless;
    var koSRCa: dimensionless;
    var kiSRCa: dimensionless;
    var RI: dimensionless;
    var J_SRCarel: dimensionless;
    var J_serca: dimensionless;
    var J_SRleak: dimensionless;
    var I_Na_tot_junc: dimensionless;
    var I_Na_tot_sl: dimensionless;
    var I_Na_tot_sl2: dimensionless;
    var I_Na_tot_junc2: dimensionless;
    var I_K_tot: dimensionless;
    var I_Ca_tot_junc: dimensionless;
    var I_Ca_tot_sl: dimensionless;
    var I_Na_tot: dimensionless;
    var I_Cl_tot: dimensionless;
    var I_Ca_tot: dimensionless;
    var I_tot: uA_per_uF;
    var ena_junc: dimensionless;
    var ena_sl: dimensionless;
    var ah: dimensionless;
    var aj: dimensionless;
    var bh: dimensionless;
    var bj: dimensionless;
    var J_CaB_junction: dimensionless;
    var J_CaB_cytosol: dimensionless;
    var J_CaB_sl: dimensionless;
    var vmax: dimensionless;
    past = floor(time/stim_period)*stim_period;
    i_Stim = sel
      case (time-past >= stim_offset) and (time-past <= stim_offset+stim_duration):
        stim_amplitude;
      otherwise:
        0{uA_per_uF};
    endsel;
    FoRT = Frdy/(R*Temp);
    Qpow = (Temp-310{dimensionless})/10{dimensionless};
    Vcell = pi*sqr(cellRadius)*cellLength*1e-15{dimensionless};
    Vmyo = 0.65{dimensionless}*Vcell;
    Vsr = 0.035{dimensionless}*Vcell;
    Vsl = 0.02{dimensionless}*Vcell;
    Vjunc = 0.0539{dimensionless}*0.01{dimensionless}*Vcell;
    SAjunc = 20150{dimensionless}*pi*2{dimensionless}*junctionLength*junctionRadius;
    SAsl = pi*2{dimensionless}*cellRadius*cellLength;
    J_ca_juncsl = 1{dimensionless}/1.2134e12{dimensionless};
    J_ca_slmyo = 1{dimensionless}/2.6851e11{dimensionless};
    J_na_juncsl = 1{dimensionless}/(1.6382e12{dimensionless}/3{dimensionless}*100{dimensionless});
    J_na_slmyo = 1{dimensionless}/(1.8308e10{dimensionless}/3{dimensionless}*100{dimensionless});
    Fsl = 1{dimensionless}-Fjunc;
    Fsl_CaL = 1{dimensionless}-Fjunc_CaL;
    ena_junc = 1{dimensionless}/FoRT*ln(Nao/sNaj);
    ena_sl = 1{dimensionless}/FoRT*ln(Nao/sNasl);
    ek = 1{dimensionless}/FoRT*ln(Ko/sKi);
    eca_junc = 1{dimensionless}/FoRT/2{dimensionless}*ln(Cao/sCaj);
    eca_sl = 1{dimensionless}/FoRT/2{dimensionless}*ln(Cao/sCasl);
    ecl = 1{dimensionless}/FoRT*ln(Cli/Clo);
    IbarNaK = 1{dimensionless}*1.8{dimensionless};
    gkp = 2{dimensionless}*0.001{dimensionless};
    GClCa = 0.5{dimensionless}*0.109625{dimensionless};
    GClB = 1{dimensionless}*9e-3{dimensionless};
    pNa = G_CaL_mult*0.5{dimensionless}*1.5e-8{dimensionless};
    pCa = G_CaL_mult*0.5{dimensionless}*5.4e-4{dimensionless};
    pK = G_CaL_mult*0.5{dimensionless}*2.7e-7{dimensionless};
    IbarNCX = 1{dimensionless}*4.5{dimensionless};
    Vmax_SRCaP = 1{dimensionless}*5.3114e-3{dimensionless};
    Bmax_SR = 19{dimensionless}*0.9e-3{dimensionless};
    Bmax_SLlowsl = 37.4e-3{dimensionless}*Vmyo/Vsl;
    Bmax_SLlowj = 4.6e-3{dimensionless}*Vmyo/Vjunc*0.1{dimensionless};
    Bmax_SLhighsl = 13.4e-3{dimensionless}*Vmyo/Vsl;
    Bmax_SLhighj = 1.65e-3{dimensionless}*Vmyo/Vjunc*0.1{dimensionless};
    Bmax_Csqn = 140e-3{dimensionless}*Vmyo/Vsr;
    mss = 1{dimensionless}/sqr(1{dimensionless}+exp(-(56.86{dimensionless}+sVm)/9.03{dimensionless}));
    taum = 0.1292{dimensionless}*exp(-sqr((sVm+45.79{dimensionless})/15.54{dimensionless}))+0.06487{dimensionless}*exp(-sqr((sVm-4.823{dimensionless})/51.12{dimensionless}));
    ah = sel
      case sVm >= -40{dimensionless}:
        0{dimensionless};
      otherwise:
        0.057{dimensionless}*exp(-(sVm+80{dimensionless})/6.8{dimensionless});
    endsel;
    bh = sel
      case sVm >= -40{dimensionless}:
        0.77{dimensionless}/(0.13{dimensionless}*(1{dimensionless}+exp(-(sVm+10.66{dimensionless})/11.1{dimensionless})));
      otherwise:
        2.7{dimensionless}*exp(0.079{dimensionless}*sVm)+3.1e5{dimensionless}*exp(0.3485{dimensionless}*sVm);
    endsel;
    tauh = 1{dimensionless}/(ah+bh);
    hss = 1{dimensionless}/sqr(1{dimensionless}+exp((sVm+71.55{dimensionless})/7.43{dimensionless}));
    aj = sel
      case sVm >= -40{dimensionless}:
        0{dimensionless};
      otherwise:
        (-2.5428e4{dimensionless}*exp(0.2444{dimensionless}*sVm)-6.948e-6{dimensionless}*exp(-0.04391{dimensionless}*sVm))*(sVm+37.78{dimensionless})/(1{dimensionless}+exp(0.311{dimensionless}*(sVm+79.23{dimensionless})));
    endsel;
    bj = sel
      case sVm >= -40{dimensionless}:
        0.6{dimensionless}*exp(0.057{dimensionless}*sVm)/(1{dimensionless}+exp(-0.1{dimensionless}*(sVm+32{dimensionless})));
      otherwise:
        0.02424{dimensionless}*exp(-0.01052{dimensionless}*sVm)/(1{dimensionless}+exp(-0.1378{dimensionless}*(sVm+40.14{dimensionless})));
    endsel;
    tauj = 1{dimensionless}/(aj+bj);
    jss = 1{dimensionless}/sqr(1{dimensionless}+exp((sVm+71.55{dimensionless})/7.43{dimensionless}));
    ode(sm, time) = (mss-sm)/taum;
    ode(sh, time) = (hss-sh)/tauh;
    ode(sj, time) = (jss-sj)/tauj;
    I_Na_junc = Fjunc*GNa*pow(sm, 3{dimensionless})*sh*sj*(sVm-ena_junc);
    I_Na_sl = Fsl*GNa*pow(sm, 3{dimensionless})*sh*sj*(sVm-ena_sl);
    I_Na = I_Na_junc+I_Na_sl;
    I_nabk_junc = Fjunc*GNaB*(sVm-ena_junc);
    I_nabk_sl = Fsl*GNaB*(sVm-ena_sl);
    I_nabk = I_nabk_junc+I_nabk_sl;
    sigma = (exp(Nao/67.3{dimensionless})-1{dimensionless})/7{dimensionless};
    fnak = 1{dimensionless}/(1{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*sVm*FoRT)+0.0365{dimensionless}*sigma*exp(-sVm*FoRT));
    I_nak_junc = 1{dimensionless}*Fjunc*IbarNaK*fnak*Ko/(1{dimensionless}+pow(KmNaip/sNaj, 4{dimensionless}))/(Ko+KmKo);
    I_nak_sl = 1{dimensionless}*Fsl*IbarNaK*fnak*Ko/(1{dimensionless}+pow(KmNaip/sNasl, 4{dimensionless}))/(Ko+KmKo);
    I_nak = I_nak_junc+I_nak_sl;
    gkr = gkr_mult*0.035{dimensionless}*sqrt(Ko/5.4{dimensionless});
    xrss = 1{dimensionless}/(1{dimensionless}+exp(-(sVm+10{dimensionless})/5{dimensionless}));
    tauxr = 550{dimensionless}/(1{dimensionless}+exp((-22{dimensionless}-sVm)/9{dimensionless}))*6{dimensionless}/(1{dimensionless}+exp((sVm-(-11{dimensionless}))/9{dimensionless}))+230{dimensionless}/(1{dimensionless}+exp((sVm-(-40{dimensionless}))/20{dimensionless}));
    ode(sxkr, time) = (xrss-sxkr)/tauxr;
    rkr = 1{dimensionless}/(1{dimensionless}+exp((sVm+74{dimensionless})/24{dimensionless}));
    I_kr = gkr*sxkr*rkr*(sVm-ek);
    eks = 1{dimensionless}/FoRT*ln((Ko+pNaK*Nao)/(sKi+pNaK*sNai));
    gks_junc = 1{dimensionless}*0.0035{dimensionless};
    gks_sl = 1{dimensionless}*0.0035{dimensionless};
    xsss = 1{dimensionless}/(1{dimensionless}+exp(-(sVm+3.8{dimensionless})/14.25{dimensionless}));
    tauxs = 990.1{dimensionless}/(1{dimensionless}+exp(-(sVm+2.436{dimensionless})/14.12{dimensionless}));
    ode(sxks, time) = (xsss-sxks)/tauxs;
    I_ks_junc = Fjunc*gks_junc*sqr(sxks)*(sVm-eks);
    I_ks_sl = Fsl*gks_sl*sqr(sxks)*(sVm-eks);
    I_ks = I_ks_junc+I_ks_sl;
    kp_kp = 1{dimensionless}/(1{dimensionless}+exp(7.488{dimensionless}-sVm/5.98{dimensionless}));
    I_kp_junc = Fjunc*gkp*kp_kp*(sVm-ek);
    I_kp_sl = Fsl*gkp*kp_kp*(sVm-ek);
    I_kp = I_kp_junc+I_kp_sl;
    GtoSlow = 1{dimensionless}*0.13{dimensionless}*0.12{dimensionless};
    GtoFast = 1{dimensionless}*0.13{dimensionless}*0.88{dimensionless};
    xtoss = 1{dimensionless}/(1{dimensionless}+exp(-(sVm-19{dimensionless})/13{dimensionless}));
    ytoss = 1{dimensionless}/(1{dimensionless}+exp((sVm+19.5{dimensionless})/5{dimensionless}));
    tauxtos = 9{dimensionless}/(1{dimensionless}+exp((sVm+3{dimensionless})/15{dimensionless}))+0.5{dimensionless};
    tauytos = 800{dimensionless}/(1{dimensionless}+exp((sVm+60{dimensionless})/10{dimensionless}))+30{dimensionless};
    ode(sxtos, time) = (xtoss-sxtos)/tauxtos;
    ode(sytos, time) = (ytoss-sytos)/tauytos;
    I_tos = GtoSlow*sxtos*sytos*(sVm-ek);
    tauxtof = 8.5{dimensionless}*exp(-sqr((sVm+45{dimensionless})/50{dimensionless}))+0.5{dimensionless};
    tauytof = 85{dimensionless}*exp(-sqr(sVm+40{dimensionless})/220{dimensionless})+7{dimensionless};
    ode(sxtof, time) = (xtoss-sxtof)/tauxtof;
    ode(sytof, time) = (ytoss-sytof)/tauytof;
    I_tof = GtoFast*sxtof*sytof*(sVm-ek);
    I_to = I_tos+I_tof;
    aki = 1.02{dimensionless}/(1{dimensionless}+exp(0.2385{dimensionless}*(sVm-ek-59.215{dimensionless})));
    bki = (0.49124{dimensionless}*exp(0.08032{dimensionless}*(sVm+5.476{dimensionless}-ek))+exp(0.06175{dimensionless}*(sVm-ek-594.31{dimensionless})))/(1{dimensionless}+exp(-0.5143{dimensionless}*(sVm-ek+4.753{dimensionless})));
    kiss = aki/(aki+bki);
    I_ki = 1{dimensionless}*0.35{dimensionless}*sqrt(Ko/5.4{dimensionless})*kiss*(sVm-ek);
    I_ClCa_junc = Fjunc*GClCa/(1{dimensionless}+KdClCa/sCaj)*(sVm-ecl);
    I_ClCa_sl = Fsl*GClCa/(1{dimensionless}+KdClCa/sCasl)*(sVm-ecl);
    I_ClCa = I_ClCa_junc+I_ClCa_sl;
    I_Clbk = GClB*(sVm-ecl);
    fss = 1{dimensionless}/(1{dimensionless}+exp((sVm+35{dimensionless})/9{dimensionless}))+0.6{dimensionless}/(1{dimensionless}+exp((50{dimensionless}-sVm)/20{dimensionless}));
    dss = 1{dimensionless}/(1{dimensionless}+exp(-(sVm+5{dimensionless})/6{dimensionless}));
    taud = dss*(1{dimensionless}-exp(-(sVm+5{dimensionless})/6{dimensionless}))/(0.035{dimensionless}*(sVm+5{dimensionless}));
    tauf = 1{dimensionless}/(0.0197{dimensionless}*exp(-sqr(0.0337{dimensionless}*(sVm+14.5{dimensionless})))+0.02{dimensionless});
    ode(sd, time) = (dss-sd)/taud;
    ode(sf, time) = (fss-sf)/tauf;
    ode(sfcaBj, time) = 1.7{dimensionless}*sCaj*(1{dimensionless}-sfcaBj)-11.9e-3{dimensionless}*sfcaBj;
    ode(sfcaBsl, time) = 1.7{dimensionless}*sCasl*(1{dimensionless}-sfcaBsl)-11.9e-3{dimensionless}*sfcaBsl;
    ibarca_j = pCa*4{dimensionless}*sVm*Frdy*FoRT*(0.341{dimensionless}*sCaj*exp(2{dimensionless}*sVm*FoRT)-0.341{dimensionless}*Cao)/(exp(2{dimensionless}*sVm*FoRT)-1{dimensionless});
    ibarca_sl = pCa*4{dimensionless}*sVm*Frdy*FoRT*(0.341{dimensionless}*sCasl*exp(2{dimensionless}*sVm*FoRT)-0.341{dimensionless}*Cao)/(exp(2{dimensionless}*sVm*FoRT)-1{dimensionless});
    ibark = pK*sVm*Frdy*FoRT*(0.75{dimensionless}*sKi*exp(sVm*FoRT)-0.75{dimensionless}*Ko)/(exp(sVm*FoRT)-1{dimensionless});
    ibarna_j = pNa*sVm*Frdy*FoRT*(0.75{dimensionless}*sNaj*exp(sVm*FoRT)-0.75{dimensionless}*Nao)/(exp(sVm*FoRT)-1{dimensionless});
    ibarna_sl = pNa*sVm*Frdy*FoRT*(0.75{dimensionless}*sNasl*exp(sVm*FoRT)-0.75{dimensionless}*Nao)/(exp(sVm*FoRT)-1{dimensionless});
    I_Ca_junc = Fjunc_CaL*ibarca_j*sd*sf*(1{dimensionless}-sfcaBj+fcaCaj)*pow(Q10CaL, Qpow)*0.45{dimensionless}*1{dimensionless};
    I_Ca_sl = Fsl_CaL*ibarca_sl*sd*sf*(1{dimensionless}-sfcaBsl+fcaCaMSL)*pow(Q10CaL, Qpow)*0.45{dimensionless}*1{dimensionless};
    I_Ca = I_Ca_junc+I_Ca_sl;
    I_CaK = ibark*sd*sf*(Fjunc_CaL*(fcaCaj+1{dimensionless}-sfcaBj)+Fsl_CaL*(fcaCaMSL+1{dimensionless}-sfcaBsl))*pow(Q10CaL, Qpow)*0.45{dimensionless}*1{dimensionless};
    I_CaNa_junc = Fjunc_CaL*ibarna_j*sd*sf*(1{dimensionless}-sfcaBj+fcaCaj)*pow(Q10CaL, Qpow)*0.45{dimensionless}*1{dimensionless};
    I_CaNa_sl = Fsl_CaL*ibarna_sl*sd*sf*(1{dimensionless}-sfcaBsl+fcaCaMSL)*pow(Q10CaL, Qpow)*0.45{dimensionless}*1{dimensionless};
    I_CaNa = I_CaNa_junc+I_CaNa_sl;
    I_Catot = I_Ca+I_CaK+I_CaNa;
    Ka_junc = 1{dimensionless}/(1{dimensionless}+sqr(Kdact/sCaj));
    Ka_sl = 1{dimensionless}/(1{dimensionless}+sqr(Kdact/sCasl));
    s1_junc = exp(nu*sVm*FoRT)*pow(sNaj, 3{dimensionless})*Cao;
    s1_sl = exp(nu*sVm*FoRT)*pow(sNasl, 3{dimensionless})*Cao;
    s2_junc = exp((nu-1{dimensionless})*sVm*FoRT)*pow(Nao, 3{dimensionless})*sCaj;
    s3_junc = KmCai*pow(Nao, 3{dimensionless})*(1{dimensionless}+pow(sNaj/KmNai, 3{dimensionless}))+pow(KmNao, 3{dimensionless})*sCaj*(1{dimensionless}+sCaj/KmCai)+KmCao*pow(sNaj, 3{dimensionless})+pow(sNaj, 3{dimensionless})*Cao+pow(Nao, 3{dimensionless})*sCaj;
    s2_sl = exp((nu-1{dimensionless})*sVm*FoRT)*pow(Nao, 3{dimensionless})*sCasl;
    s3_sl = KmCai*pow(Nao, 3{dimensionless})*(1{dimensionless}+pow(sNasl/KmNai, 3{dimensionless}))+pow(KmNao, 3{dimensionless})*sCasl*(1{dimensionless}+sCasl/KmCai)+KmCao*pow(sNasl, 3{dimensionless})+pow(sNasl, 3{dimensionless})*Cao+pow(Nao, 3{dimensionless})*sCasl;
    I_ncx_junc = Fjunc*IbarNCX*pow(Q10NCX, Qpow)*Ka_junc*(s1_junc-s2_junc)/s3_junc/(1{dimensionless}+ksat*exp((nu-1{dimensionless})*sVm*FoRT));
    I_ncx_sl = Fsl*IbarNCX*pow(Q10NCX, Qpow)*Ka_sl*(s1_sl-s2_sl)/s3_sl/(1{dimensionless}+ksat*exp((nu-1{dimensionless})*sVm*FoRT));
    I_ncx = I_ncx_junc+I_ncx_sl;
    I_pca_junc = Fjunc*pow(Q10SLCaP, Qpow)*IbarSLCaP*pow(sCaj, 1.6{dimensionless})/(pow(KmPCa, 1.6{dimensionless})+pow(sCaj, 1.6{dimensionless}));
    I_pca_sl = Fsl*pow(Q10SLCaP, Qpow)*IbarSLCaP*pow(sCasl, 1.6{dimensionless})/(pow(KmPCa, 1.6{dimensionless})+pow(sCasl, 1.6{dimensionless}));
    I_pca = I_pca_junc+I_pca_sl;
    I_cabk_junc = Fjunc*GCaB*(sVm-eca_junc);
    I_cabk_sl = Fsl*GCaB*(sVm-eca_sl);
    I_cabk = I_cabk_junc+I_cabk_sl;
    kCaSR = MaxSR-(MaxSR-MinSR)/(1{dimensionless}+pow(ec50SR/sCa_sr, 2.5{dimensionless}));
    koSRCa = koCa/kCaSR;
    kiSRCa = kiCa*kCaSR;
    RI = 1{dimensionless}-sRyRr-sRyRo-sRyRi;
    ode(sRyRr, time) = kim*RI-kiSRCa*sCaj*sRyRr-(koSRCa*sqr(sCaj)*sRyRr-kom*sRyRo);
    ode(sRyRo, time) = koSRCa*sqr(sCaj)*sRyRr-kom*sRyRo-(kiSRCa*sCaj*sRyRo-kim*sRyRi);
    ode(sRyRi, time) = kiSRCa*sCaj*sRyRo-kim*sRyRi-(kom*sRyRi-koSRCa*sqr(sCaj)*RI);
    J_SRCarel = ks*sRyRo*(sCa_sr-sCaj);
    J_serca = 1{dimensionless}*pow(Q10SRCaP, Qpow)*Vmax_SRCaP*(pow(sCai/Kmf, hillSRCaP)-pow(sCa_sr/Kmr, hillSRCaP))/(1{dimensionless}+pow(sCai/Kmf, hillSRCaP)+pow(sCa_sr/Kmr, hillSRCaP));
    J_SRleak = 5.348e-6{dimensionless}*(sCa_sr-sCaj);
    ode(sNaBj, time) = kon_na*sNaj*(Bmax_Naj-sNaBj)-koff_na*sNaBj;
    ode(sNaBsl, time) = kon_na*sNasl*(Bmax_Nasl-sNaBsl)-koff_na*sNaBsl;
    ode(sTnCL, time) = kon_tncl*sCai*(Bmax_TnClow-sTnCL)-koff_tncl*sTnCL;
    ode(sTnCHc, time) = kon_tnchca*sCai*(Bmax_TnChigh-sTnCHc-sTnCHm)-koff_tnchca*sTnCHc;
    ode(sTnCHm, time) = kon_tnchmg*Mgi*(Bmax_TnChigh-sTnCHc-sTnCHm)-koff_tnchmg*sTnCHm;
    ode(sCaM, time) = kon_cam*sCai*(Bmax_CaM-sCaM)-koff_cam*sCaM;
    ode(sMyoc, time) = kon_myoca*sCai*(Bmax_myosin-sMyoc-sMyom)-koff_myoca*sMyoc;
    ode(sMyom, time) = kon_myomg*Mgi*(Bmax_myosin-sMyoc-sMyom)-koff_myomg*sMyom;
    ode(sSRB, time) = kon_sr*sCai*(Bmax_SR-sSRB)-koff_sr*sSRB;
    J_CaB_cytosol = ode(sTnCL, time)+ode(sTnCHc, time)+ode(sTnCHm, time)+ode(sCaM, time)+ode(sMyoc, time)+ode(sMyom, time)+ode(sSRB, time);
    ode(sSLLj, time) = kon_sll*sCaj*(Bmax_SLlowj-sSLLj)-koff_sll*sSLLj;
    ode(sSLLsl, time) = kon_sll*sCasl*(Bmax_SLlowsl-sSLLsl)-koff_sll*sSLLsl;
    ode(sSLHj, time) = kon_slh*sCaj*(Bmax_SLhighj-sSLHj)-koff_slh*sSLHj;
    ode(sSLHsl, time) = kon_slh*sCasl*(Bmax_SLhighsl-sSLHsl)-koff_slh*sSLHsl;
    J_CaB_junction = ode(sSLLj, time)+ode(sSLHj, time);
    J_CaB_sl = ode(sSLLsl, time)+ode(sSLHsl, time);
    ode(sCsqnb, time) = kon_csqn*sCa_sr*(Bmax_Csqn-sCsqnb)-koff_csqn*sCsqnb;
    ode(sCa_sr, time) = J_serca-(J_SRleak*Vmyo/Vsr+J_SRCarel)-ode(sCsqnb, time);
    I_Na_tot_junc = I_Na_junc+I_nabk_junc+3{dimensionless}*I_ncx_junc+3{dimensionless}*I_nak_junc+I_CaNa_junc;
    I_Na_tot_sl = I_Na_sl+I_nabk_sl+3{dimensionless}*I_ncx_sl+3{dimensionless}*I_nak_sl+I_CaNa_sl;
    I_Na_tot_sl2 = 3{dimensionless}*I_ncx_sl+3{dimensionless}*I_nak_sl+I_CaNa_sl;
    I_Na_tot_junc2 = 3{dimensionless}*I_ncx_junc+3{dimensionless}*I_nak_junc+I_CaNa_junc;
    ode(sNaj, time) = -I_Na_tot_junc*Cmem/(Vjunc*Frdy)+J_na_juncsl/Vjunc*(sNasl-sNaj)-ode(sNaBj, time);
    ode(sNasl, time) = -I_Na_tot_sl*Cmem/(Vsl*Frdy)+J_na_juncsl/Vsl*(sNaj-sNasl)+J_na_slmyo/Vsl*(sNai-sNasl)-ode(sNaBsl, time);
    ode(sNai, time) = J_na_slmyo/Vmyo*(sNasl-sNai);
    I_K_tot = I_to+I_kr+I_ks+I_ki-2{dimensionless}*I_nak+I_CaK+I_kp;
    I_Ca_tot_junc = I_Ca_junc+I_cabk_junc+I_pca_junc-2{dimensionless}*I_ncx_junc;
    I_Ca_tot_sl = I_Ca_sl+I_cabk_sl+I_pca_sl-2{dimensionless}*I_ncx_sl;
    ode(sCaj, time) = -I_Ca_tot_junc*Cmem/(Vjunc*2{dimensionless}*Frdy)+J_ca_juncsl/Vjunc*(sCasl-sCaj)-J_CaB_junction+J_SRCarel*Vsr/Vjunc+J_SRleak*Vmyo/Vjunc;
    ode(sCasl, time) = -I_Ca_tot_sl*Cmem/(Vsl*2{dimensionless}*Frdy)+J_ca_juncsl/Vsl*(sCaj-sCasl)+J_ca_slmyo/Vsl*(sCai-sCasl)-J_CaB_sl;
    ode(sCai, time) = -J_serca*Vsr/Vmyo-J_CaB_cytosol+J_ca_slmyo/Vmyo*(sCasl-sCai);
    I_Na_tot = I_Na_tot_junc+I_Na_tot_sl;
    I_Cl_tot = I_ClCa+I_Clbk;
    I_Ca_tot = I_Ca_tot_junc+I_Ca_tot_sl;
    I_tot = I_Na_tot+I_Cl_tot+I_Ca_tot+I_K_tot;
    ode(sVm, time) = -(I_tot+i_Stim);
    vmax = ode(sVm, time);
  enddef;
enddef;
